PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "Spanish"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = HLJT_FR
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 2.4
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Colors
        red = [1, 0, 0]
        white = [1, 1, 1]
        green = [0, 0.75, 0]
        black = [-1, -1, -1]
        grey = [0.0039, 0.0039, 0.0039]

        # Define variables
        fill_left = black
        fill_right = black
        msg_fb = ""
        msg_color = grey

        # Timing thresholds in seconds (+/- 100ms last tone)
        t_early_threshold = 1.9
        t_late_threshold = 2.1
        t_no_response = 2.3
      Begin Routine:
        # set variables to their starting values
        fill_left = black
        fill_right = black
        fb_msg = ""
        msg_color = grey
      Each Frame:
        # Feedback based on response time
        if key_resp.keys is None or key_resp.rt in [None, []]:
            fb_msg = ""
            msg_color = grey  # Default color if no response
        else:
            rt = key_resp.rt[0] if isinstance(key_resp.rt, list) else key_resp.rt
            if rt <= t_early_threshold:
                fb_msg = early_msg
                msg_color = black
            elif t_early_threshold < rt < t_late_threshold:
                fb_msg = ""
                msg_color = grey
            elif rt >= t_late_threshold:
                fb_msg = late_msg
                msg_color = black

        # Feedback based on response accuracy
        if key_resp.keys == "s":
            if key_resp.corr == 1:
                fill_left = green
                fill_right = black
            else:
                fill_left = red
                fill_right = black
        elif key_resp.keys == "l":
            if key_resp.corr == 1:
                fill_left = black
                fill_right = green
            else:
                fill_left = black
                fill_right = red
      End Routine:
        # when did the stimulus actually appear?
        thisExp.addData('stim_picture.frameNStart', stim_picture.frameNStart)
        thisExp.addData('stim_picture.tStart', stim_picture.tStart)
        # when did the last tone actually sound?
        thisExp.addData('sound_4.frameNStart', sound_4.frameNStart)
        thisExp.addData('sound_4.tStart', sound_4.tStart)

        # save current block for more intuitive output
        thisExp.addData("block_number", block_number)
    PolygonComponent fix_cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent stim_picture
      image [set every repeat] = $stim_file
      ori [set every repeat] = stim_angle
      size = (0.45, 0.45)
      startVal [time (s)] = $stim_timing
      stopVal [duration (s)] = 2.1
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    PolygonComponent box_left
      fillColor [set every frame] = $fill_left
      lineColor [set every frame] = $fill_left
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_right
      fillColor [set every frame] = $fill_right
      lineColor [set every frame] = $fill_right
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound [set every repeat] = A
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.05
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    SoundComponent sound_2
      sound [set every repeat] = A
      startVal [time (s)] = 0.68
      stopVal [duration (s)] = 0.05
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    SoundComponent sound_3
      sound [set every repeat] = A
      startVal [time (s)] = 1.34
      stopVal [duration (s)] = 0.05
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    SoundComponent sound_4
      sound [set every repeat] = B
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.05
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    TextComponent fb_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $fb_msg
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    KeyboardComponent key_resp
      allowedKeys = 's','l'
      correctAns = $stim_correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine language_settings
    RoutineSettingsComponent language_settings
      saveStartStop = False
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    CodeComponent PY_load_messages
      Code Type = Py
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      Begin Experiment:
        ## THIS CODE ONLY WORKS IN PYTHON, NOT JAVASCRIPT ##
        # import python package to read Excel file *at the beginning of the experiment*
        import pandas as pd
        # make sure lang_code is defined and set to EN as default
        lang_code = "EN"
        # read excel file with messages according to language codes
        messages_df = pd.read_excel('messages.xlsx')
        # create an empty global dictionary with the messages
        MESSAGES = {}
        # assign each value of language to the corresponding key of language (language code)
        for idx, row in messages_df.iterrows():
            key = row['message']
            MESSAGES[key] = {}
            for col in row.index:
                if col != 'message':
                    MESSAGES[key][col] = row[col]
        # create global variables with the list of messages to be usable throuhgout the experiment
        for key in MESSAGES:
            globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN'])  # fallback to English if language is not localised
      Begin Routine:
        # update language code based on the selected language in dialogue box
        if language == expInfo['language']:
            # we 'code' as a variable directly because it's already loaded in the localiser excel sheet
            lang_code = ISO_code
            thisExp.addData("language_code", lang_code)  # add it to output
            # update global variables with new language
            # allow the messages to be used throughout the experiment by making them global variables
            for key in MESSAGES:
                globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN']) # defaults to english if something is wrong
    CodeComponent JS_load_messages
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        // THIS CODE ONLY RUNS IN JAVASCRIPT //
        // Because we cannot load the Excel sheet via pandas, we define all the messages
        // manually at the beginning
        title = "";
        welcome_msg = "";
        adv_msg = "";
        bye_msg = "";
        correct_msg = "";
        rt_msg = "";
        block_first_msg = "";
        block_intro_task_msg = "";
        block_msg_half = "";
        block_msg_standard = "";
        block_n_msg1 = "";
        block_n_msg2 = "";
        volume_msg = "";
        test_vol_msg = "";
        increase_vol_msg = "";
        decrease_vol_msg = "";
        proceed_task_msg = "";
        fb_msg = "";
        early_msg = "";
        late_msg = "";
        nr_msg = "";
      Begin JS Routine:
        // update language code based on the selected language in dialogue box
        if language == expInfo['language']:
            # we 'code' as a variable directly because it's already loaded in the localiser excel sheet
            lang_code = code
            thisExp.addData("language_code", lang_code)  # add it to output
            # update global variables with new language
            # allow the messages to be used throughout the experiment by making them global variables
            for key in MESSAGES:
                globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN']) # defaults to english if something is wrong
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        instr_msg = ""
        block_welcome_msg = ""
        block_pause_msg = ""
      Begin Routine:
        # get column from excel sheet based on language code
        try:
            instr_msg = eval(f"instr_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            instr_msg = instr_msg_EN
    TextComponent title_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, 0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $title
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    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.0275
      pos [set every repeat] = (text_pos_x, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg
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    TextComponent advance_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    ImageComponent inst_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $image_file
      pos = (0.5, 0)
      saveStartStop = False
      size [set every repeat] = [image_w, image_h]
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    RoutineSettingsComponent bye
      stopVal [duration (s)] = 3
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine exp_settings
    RoutineSettingsComponent exp_settings
      saveStartStop = False
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    CodeComponent exp_settings_code
      Code Type = Auto->JS
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      Begin Experiment:
        # block settings
        # we recommend at least 2 practice blocks to get familiar with the task timings
        practice_blocks = 2
        task_blocks = 10
        total_blocks = practice_blocks + task_blocks
        n_blocks = 0  # to be changed at will
        block_number = 0 # initialize variable for output

        # how many reps of the whole conditions file per block?
        # this means if you're conditions file has 4 rows
        # PsychoPy will loop through your 4 rows N times
        reps_per_block = 1

        # settings for max/min time of breaks between blocks
        # maximum times
        reg_max_pause = 60 # in seconds
        half_max_pause = 60*5 # we allow more time half-way through the task
        # minimum times
        min_pause = 0 # variable to be updated later
        reg_min_pause = 0 # in seconds
        half_min_pause = 1
    CodeComponent conditions_order
      Code Type = Auto->JS
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      Begin Experiment:
        # list of conditions files
        cond_files_list = [f"cond_files/task_block{i}.csv" for i in range(1, 11)]
        cond_file_index = 0
        # randomize order
        import random
        random.shuffle(cond_files_list)
        thisExp.addData("cond_files_list", cond_files_list)
        thisExp.addData("cond_file_index", cond_file_index)
  Routine fb
    RoutineSettingsComponent fb
      stopVal [duration (s)] = 1
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Skip routine if a key has been pressed
        if key_resp.keys != None:
            continueRoutine = False
        else:
            continueRoutine = True
    TextboxComponent textbox
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.06
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $nr_msg
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    PolygonComponent box_left_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent box_right_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine block_start
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    CodeComponent block_settings_code
      Code Type = Auto->JS
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      Begin Experiment:
        cond_file = ""
      Begin Routine:
        # hide mouse for the rest of the experiment
        win.mouseVisible = False
        # start block at 1 and increase every iteration
        block_number += 1
        # initialize timer
        screen_timer = core.Clock()
        # set up block settings and messages according to task progress
        # and minimum time for pauses
        # assuming we want practice blocks, which is recommended
        # if you want to set up the trial order beforehand, you would just need
        # to have separate excel sheets for each block, and specify the order with
        # elif statements OR more conveniently, have some code to randomize your
        # order of excel sheets and then proceed with the randomized list in a
        # sequential order
        if block_number <= practice_blocks: # assuming there are practice blocks
            cond_file = "cond_files/cond_practice.csv"
            min_pause = reg_min_pause
            if block_number == 1:
                block_message = block_first_msg
            else:
                block_message = block_msg_standard
        elif block_number > practice_blocks:
            cond_file = cond_files_list[cond_file_index] # start at 0
            cond_file_index += 1
            block_message = block_msg_standard
            min_pause = reg_min_pause
            if block_number == practice_blocks + 1:
                block_message = block_intro_task_msg
        # halfway through the task we force a break and change the message
            elif block_number - practice_blocks == round(task_blocks / 2) + 1:
                block_message = block_msg_half
                min_pause = half_min_pause # set up at the start of exp!

        thisExp.addData("block_number", block_number)
        thisExp.addData("cond_file_index", cond_file_index)
        thisExp.addData("cond_file", cond_file)
      Each Frame:
        # show timer
        elapsed = screen_timer.getTime()
        minutes = int(elapsed // 60)
        seconds = int(elapsed % 60)
        timer_text = f"{minutes:02d}:{seconds:02d}"

        # depending on block number, allow 1 or 5 minutes
        if block_number == round(n_blocks / 2):
            # halfway through, 5 minutes
            if seconds >= half_max_pause:
                continueRoutine = False
        else:
            # otherwise 1 minute
            if seconds >= reg_max_pause:
                continueRoutine = False
      End Routine:
        thisExp.addData("block_pause", seconds)
    TextComponent block_main_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent block_number_text
      color = 0.0824, -0.6627, 0.7725
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_n_msg1 + ' ' + str(block_number) + ' ' + block_n_msg2 + ' ' + str(total_blocks) 
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    KeyboardComponent block_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $min_pause
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    TextComponent block_start_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = $min_pause
      text [set every repeat] = $adv_msg
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    TextComponent timer
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.8, -0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $timer_text
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  Routine trial_inst
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    CodeComponent trial_inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Create a counter for the number of instructions
        audio_counter = 0
      Begin Routine:
        # select the column of excel file which corresponds to the stimulus
        current_column = stimulus

        # Initialise the counter at the beginning of the loop
        if trial_inst_loop.thisN == 0:
            audio_counter = 0

        # Check if we've reached the max number of instructions
        if audio_counter == n_instr:
            # stop the instruction screen and loop
            continueRoutine = False
            trial_inst_loop.finished = True
      End Routine:
        # Increment the counter only if an audio was played
        audio_counter += 1
    SoundComponent inst_sound
      sound [set every repeat] = $eval(current_column)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $'Stimulus: ' + str(stimulus) 
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  Routine volume_check
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    CodeComponent volume_code
      Code Type = Auto->JS
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      Begin Experiment:
        current_volume = 0.3
      Begin Routine:
        # show mouse
        win.mouseVisible = True
        # ask for input in the first routine of loop
        manual_play = (volume_loop.thisN == 0)
        sound_played = False
      Each Frame:
        # set so that for next iterations the sound plays automatically
        # at the beginning of the routine
        if manual_play:
            if test_volume.wasClicked and not sound_played:
                volume_sound.play()
                sound_played = True
        else:
            if not sound_played:
                volume_sound.play()
                sound_played = True
    TextComponent vol_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $volume_msg
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    ButtonComponent test_volume
      bold = True
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $test_vol_msg
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    ButtonComponent increase_volume
      bold = True
      callback = current_volume = current_volume + 0.15
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $increase_vol_msg
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    ButtonComponent decrease_volume
      bold = True
      callback = current_volume = current_volume - 0.15
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $decrease_vol_msg
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    SoundComponent volume_sound
      saveStartStop = False
      sound [set every repeat] = A
      stopVal [duration (s)] = 0.3
      volume [set every repeat] = current_volume
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    ButtonComponent proceed_to_task
      bold = True
      borderColor = 0.2941, -0.6706, -0.6706
      callback = volume_loop.finished = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0824, -0.6627, 0.7725
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.4, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $proceed_task_msg
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 1
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  Routine countdown
    RoutineSettingsComponent countdown
      stopVal [duration (s)] = 3.5
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine load_inst
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    CodeComponent load_inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        instructions_file = ""
      Begin Routine:
        # define instructions and number of blocks based on iteration of outer loop
        if task_loop.thisN == 0:
            instructions_file = "instructions_practice.xlsx"
            n_blocks = practice_blocks
        else:
            instructions_file = "instructions_task.xlsx"
            n_blocks = task_blocks
Flow
  Routine exp_settings
  LoopInitiator language_loop loopType="TrialHandler"
    conditionsFile = language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'},
      {'language': 'German', 'ISO_code': 'DE'}]
    Routine language_settings
  LoopTerminator language_loop
  Routine welcome
  LoopInitiator volume_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine volume_check
  LoopTerminator volume_loop
  LoopInitiator task_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine load_inst
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = $instructions_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instructions
    LoopTerminator instructions_loop
    LoopInitiator blocks_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = n_blocks
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      Routine block_start
      Routine countdown
      LoopInitiator trials_loop loopType="TrialHandler"
        Selected rows = 0:3
        conditionsFile = $cond_file
        loopType = sequential
        nReps = reps_per_block
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        conditions:
          [OrderedDict([('stim_angle', 180), ('stim_laterality', 'right'), ('stim_view', 'dorsal'), ('stim_timing', 1940), ('stim_file', 'stimuli/right_dorsal.png'), ('stim_correct_key', 'l')]),
          OrderedDict([('stim_angle', 90), ('stim_laterality', 'left'), ('stim_view', 'dorsal'), ('stim_timing', 460), ('stim_file', 'stimuli/left_dorsal.png'), ('stim_correct_key', 's')]),
          OrderedDict([('stim_angle', 270), ('stim_laterality', 'right'), ('stim_view', 'palmar'), ('stim_timing', 1260), ('stim_file', 'stimuli/right_palmar.png'), ('stim_correct_key', 'l')]),
          OrderedDict([('stim_angle', 90), ('stim_laterality', 'left'), ('stim_view', 'dorsal'), ('stim_timing', 740), ('stim_file', 'stimuli/left_dorsal.png'), ('stim_correct_key', 's')]),
          OrderedDict([('stim_angle', 0), ('stim_laterality', 'left'), ('stim_view', 'palmar'), ('stim_timing', 1740), ('stim_file', 'stimuli/left_palmar.png'), ('stim_correct_key', 's')]),
          OrderedDict([('stim_angle', 270), ('stim_laterality', 'left'), ('stim_view', 'dorsal'), ('stim_timing', 580), ('stim_file', 'stimuli/left_dorsal.png'), ('stim_correct_key', 's')]),
          OrderedDict([('stim_angle', 180), ('stim_laterality', 'right'), ('stim_view', 'dorsal'), ('stim_timing', 820), ('stim_file', 'stimuli/right_dorsal.png'), ('stim_correct_key', 'l')]),
          OrderedDict([('stim_angle', 0), ('stim_laterality', 'left'), ('stim_view', 'dorsal'), ('stim_timing', 1480), ('stim_file', 'stimuli/left_dorsal.png'), ('stim_correct_key', 's')])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
        Routine trial
        Routine fb
      LoopTerminator trials_loop
    LoopTerminator blocks_loop
  LoopTerminator task_loop
  Routine bye
